PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = thresholding
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine wait
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    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please press space to release the next stimulation.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine shock
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    TextComponent cue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = Delivering.
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    CodeComponent shock
      Code Type = Py
      Before Experiment:
        from ds8r import DS8R
      Begin Routine:
        current_intensity = thisTrial['intensity']
        electrical_shock = DS8R(mode=1, polarity=1, source=1,demand = int(current_intensity * 10),
                                             pulse_width=500, dwell=10, recovery=20, enabled=1)
        electrical_shock.run()
    TextComponent current_intensity
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $intensity
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  Routine rate
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How painful did this stimulation feel on a scale from 1 (barely perceptible) to 10 (the strongest pain you ever felt)?

        If you did not feel anything, press 0.

        Please confirm your choice pressing 'enter'.
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Click and type here...
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine shock_confirm
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    TextComponent cue_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = Delivering.
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    CodeComponent shock_2
      Code Type = Py
      Before Experiment:
        from ds8r import DS8R
      Begin Routine:
        current_intensity = max_inten - 0.5
        electrical_shock = DS8R(mode=1, polarity=1, source=1,demand = int(current_intensity * 10),
                                             pulse_width=500, dwell=10, recovery=20, enabled=1)
        electrical_shock.run()
    CodeComponent code_2
      Code Type = Py
      disabled = True
      Begin Routine:
        print(max_inten)
  Routine finish_loop
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    CodeComponent break_2
      Code Type = Py
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      Begin Experiment:
        if finish_flag:
  Routine finish_flag
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    CodeComponent initialise_flag
      Code Type = Py
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      Begin Experiment:
        finish_flag = 0
  Routine break_loop
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if textbox.text == '10' or textbox.text == '9':
            max_inten = thisTrial['intensity']
            trials.finished = True
  Routine introduction
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = continueRoutine==True
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      text:
        Before we start the tasks, we will test how painful the stimulation feels for you personally.
        In order to do that, we will pinpoint the level of intensity that is painful but bearable for you. That is, you will receive different intensities of stimulation and rate them on a scale from 1 (barely perceptible) to 10 (unbearable pain).

        If you are ready to start, please press 'enter'.
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'intensity': 1.5},
      {'intensity': 2},
      {'intensity': 2.5},
      {'intensity': 3},
      {'intensity': 3.5},
      {'intensity': 4},
      {'intensity': 4.5},
      {'intensity': 5},
      {'intensity': 5.5},
      {'intensity': 6},
      {'intensity': 6.5},
      {'intensity': 7},
      {'intensity': 7.5},
      {'intensity': 8},
      {'intensity': 8.5},
      {'intensity': 9},
      {'intensity': 9.5},
      {'intensity': 10}]
    Routine wait
    Routine shock
    Routine rate
    Routine break_loop
  LoopTerminator trials
  Routine wait
  Routine shock_confirm
  Routine rate
